<?xml version='1.0' encoding='UTF-8'?>
<model name="Enzyme2_BG" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="Units.cellml">
        <units name="mol_per_m3" units_ref="mol_per_m3"/>
        <!--q-->
        <units name="mol_per_m3_s" units_ref="mol_per_m3_s"/>
        <!--v-->
        <units name="per_m" units_ref="per_m"/>
        <!--K_A-->
        <units name="mol_per_s" units_ref="mol_per_s"/>
        <!--K_Re-->
        <units name="J_per_mol" units_ref="J_per_mol"/>
        <!--u-->
        <units name="C_per_mol" units_ref="C_per_mol"/>
        <units name="J_per_mol_K" units_ref="J_per_mol_K"/>
        <!-- R-->
    </import>
    <component name="main">
        <variable name="t" units="second"/>
        <variable initial_value="1" name="q_A" units="mol_per_m3"/>
        <variable initial_value="1" name="q_B" units="mol_per_m3"/>
        <variable initial_value="0.001" name="q_C" units="mol_per_m3"/>
        <variable initial_value="1" name="q_E" units="mol_per_m3"/>
        <variable name="v1" units="mol_per_s"/>
        <variable name="v4" units="mol_per_s"/>
        <variable initial_value="20" name="KA" units="per_m"/>
        <variable initial_value="20" name="KB" units="per_m"/>
        <variable initial_value="20" name="KC" units="per_m"/>
        <variable initial_value="1" name="KE" units="per_m"/>
        <variable initial_value="0.02" name="Kappa" units="mol_per_m3_s"/>
        <variable initial_value="8.314" name="R" units="J_per_mol_K"/>
        <variable initial_value="300" name="T" units="kelvin"/>
        <variable name="u_A" units="J_per_mol"/>
        <variable name="u_B" units="J_per_mol"/>
        <variable name="u_C" units="J_per_mol"/>
        <variable name="u_E" units="J_per_mol"/>
        <variable name="v_A" units="mol_per_s"/>
        <variable name="v_B" units="mol_per_s"/>
        <variable name="v_C" units="mol_per_s"/>
        <variable name="v_E" units="mol_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_A</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_B</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v1</ci>
                    <ci>v4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C</ci>
                </apply>
                <ci>v4</ci>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_E</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v4</ci>
                    <ci>v1</ci>
                </apply>
            </apply>
            <!-- q_E will remain constant-->
            <apply>
                <eq/>
                <ci>v1</ci>
                <apply>
                    <times/>
                    <ci>Kappa</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>KA</ci>
                            <ci>q_A</ci>
                            <ci>KE</ci>
                            <ci>q_E</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>KB</ci>
                            <ci>q_B</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v4</ci>
                <apply>
                    <times/>
                    <ci>Kappa</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>KB</ci>
                            <ci>q_B</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>KE</ci>
                            <ci>q_E</ci>
                            <ci>KC</ci>
                            <ci>q_C</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_A</ci>
                <apply>
                    <times/>
                    <ci>R</ci>
                    <ci>T</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>KA</ci>
                            <ci>q_A</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_B</ci>
                <apply>
                    <times/>
                    <ci>R</ci>
                    <ci>T</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>KB</ci>
                            <ci>q_B</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_C</ci>
                <apply>
                    <times/>
                    <ci>R</ci>
                    <ci>T</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>KC</ci>
                            <ci>q_C</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_E</ci>
                <apply>
                    <times/>
                    <ci>R</ci>
                    <ci>T</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>KE</ci>
                            <ci>q_E</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_A</ci>
                <apply>
                    <minus/>
                    <ci>v1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_B</ci>
                <apply>
                    <minus/>
                    <ci>v1</ci>
                    <ci>v4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_C</ci>
                <ci>v4</ci>
            </apply>
            <apply>
                <eq/>
                <ci>v_E</ci>
                <apply>
                    <minus/>
                    <ci>v4</ci>
                    <ci>v1</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
